OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
0x790d75b8 = Brylie Christopher Oxley
0x9f5c4075 = GDF time based epoching with signal averaging (comparison against raw signal)

GDF file reader => #0
  Filename = /home/brylie/BCI/openvibe-examples/AlphaOccipital.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> 0xc67a01dc Time based epoching => #1
  Epoch 1 duration (in sec) = 3
  Epoch 1 intervals (in sec) = 3
Data=#1 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Signal average => #3
Data=#3 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.EEG stream -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.EEG stream -> Signal average => #6
Data=#6 -> Signal display
  Display Mode = Scroll
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
